OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> 0x341d3912 Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Identity
-> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Identity => #4
Signal=#4 -> 0x341d3912 EDF File Writer
  Filename = C://Users/NMIL-Y720-1/Desktop/Dataset/RawData
Signal=#0.Signal stream -> GDF file writer
  Filename = C:/Users/NMIL-Y720-1/Desktop/Dataset/Participant_Data/RawData
Input stream=#0.Signal stream -> CSV File Writer
  Filename = C:/Users/NMIL-Y720-1/Desktop/Dataset/Participant_Data/RawData.csv
  Precision = 10
  Append data = true
  Only last matrix = false
#0.Signal stream -> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12.5
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
Data=#8 -> Signal display "Beta Filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
